srate = 48000
nchannels_in = 4
fragsize = 128

iolib = MHAIOJack
io.con_in = [system:capture_1 system:capture_2 system:capture_5 system:capture_6]
io.con_out = [system:playback_1 system:playback_2]

mhalib = transducers

mha.calib_out.peaklevel = 85
mha.calib_in.peaklevel = 85.6

mha.plugin_name = altplugs

mha.altplugs.plugs = [mhachain:mic_test mhachain:audiogram_meas mhachain:calibration overlapadd]

mha.altplugs.mic_test?read:${MHA_AUDIOGRAM_CONFIG_PATH}/mic_test.cfg
mha.altplugs.audiogram_meas?read:${MHA_AUDIOGRAM_CONFIG_PATH}/audiogram_meas.cfg
mha.altplugs.calibration?read:${MHA_AUDIOGRAM_CONFIG_PATH}/calibration.cfg
mha.altplugs.overlapadd?read:${MHA_AUDIOGRAM_CONFIG_PATH}/dynamic_comp.cfg

mha.altplugs.select = mic_test